PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  expName = ninosDelConv2
  keyboardBackend = ioHub
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Routines
  Routine Inst4
    TextComponent Intro4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hagamos unos ensayos de práctica
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    KeyboardComponent key4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Inst1
    TextComponent intro1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        A continuación vas a completar una tarea computarizada en la que tomarás una serie de decisiones.

        Presiona la barra de espacio para continuar.
    KeyboardComponent key1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Inst3
    KeyboardComponent key3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent intro3
      letterHeight = 0.1
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      text = Por ejemplo, ¿qué preferirías?
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    TextComponent ss_am
      letterHeight = 0.1
      pos = [-0.5,0.1]
      startVal [time (s)] = 0.0
      text = \$5.000
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    TextComponent ss_del
      letterHeight = 0.1
      pos = [-0.5, -0.1]
      startVal [time (s)] = 0.0
      text = hoy
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    TextComponent ll_am
      letterHeight = 0.1
      pos = [0.5, 0.1]
      startVal [time (s)] = 0.0
      text = \$10.000
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    TextComponent ll_del
      letterHeight = 0.1
      pos = [0.5, -0.1]
      startVal [time (s)] = 0.0
      text = en 7 días
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  Routine fb_Pract
    CodeComponent code_f
      Code Type = Auto->JS
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      Begin Experiment:
        #some value for msg!
        msg=''
      Begin Routine:
        if not respP.keys :
             msg="No respondiste a tiempo!"
        elif respP.corr:#stored on last run routine
             msg="Elegiste esperar"
        else:
             msg="Elegiste no esperar"
    TextComponent feedbackP
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
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  Routine ITC
    CodeComponent randITC
      Code Type = Auto->JS
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      Begin Experiment:
        # specify default vars
        targetPosAmSS = []
        targetPosAmLL = []
        targetPosDelSS = []
        targetPosDelLL = []

        # specify lists of stimulus positions and their corresponding responses:
        positionsAm = [[-0.5,0.1], [0.5,0.1]]
        positionsDel = [[-0.5,-0.1], [0.5,-0.1]]
        responses = ['left', 'right']

        # create a list of indices to those lists, which will
        # get shuffled on each trial:
        indices = [0, 1]
      Begin Routine:
        # randomise locations for this trial:
        shuffle(indices)

        targetPosAmSS = positionsAm[indices[0]]
        targetPosAmLL = positionsAm[indices[1]]
        targetPosDelSS = positionsDel[indices[0]]
        targetPosDelLL = positionsDel[indices[1]]

        # get the corresponding correct response:
        corrAns = responses[indices[1]]
    TextComponent preguntaT
      letterHeight = 0.1
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = ¿qué preferirías?
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    TextComponent ssAm_T
      letterHeight = 0.1
      pos [set every repeat] = targetPosAmSS
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $ss_Amt_text
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    TextComponent ssDel_T
      letterHeight = 0.1
      pos [set every repeat] = targetPosDelSS
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = hoy
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    TextComponent llAm_T
      letterHeight = 0.1
      pos [set every repeat] = targetPosAmLL
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $ll_Amt_text
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    TextComponent llDel_T
      letterHeight = 0.1
      pos [set every repeat] = targetPosDelLL
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $ll_Delay_text
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    KeyboardComponent respT
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 19.5
      storeCorrect = True
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  Routine fb_Trials
    CodeComponent code_fT
      Code Type = Auto->JS
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      Begin Experiment:
        #some value for msg!
        msg=''
      Begin Routine:
        if not respT.keys :
            msg="No respondiste a tiempo!"
        elif respT.corr:#stored on last run routine
            msg="Elegiste esperar"
        else:
            msg="Elegiste no esperar"
    TextComponent textfbT
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
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  Routine Instr2
    TextComponent intro2
      letterHeight = 0.06
      startVal [time (s)] = 0
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      text:
        Todas las decisiones que tendrás que tomar serán elecciones entre dos opciones de recompensas monetarias que podrías recibir: una opción de dinero que obtendrías hoy contra una opción de dinero que obtendrías en el futuro.

        En cada pregunta, las cantidades de dinero ofrecido y el número de días que habría que esperar en el futuro cambiarán.

        En cada pregunta, la opción inmediata y la  opción futura cambiarán de lado en la pantalla, así que debes poner atención para responder con el teclado cuál es tu preferencia.
    KeyboardComponent key2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Pract
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # specify default vars
        targetPosAmSS = []
        targetPosAmLL = []
        targetPosDelSS = []
        targetPosDelLL = []
        # specify lists of stimulus positions and their corresponding responses:
        positionsAm = [[-0.5,0.1], [0.5,0.1]]
        positionsDel = [[-0.5,-0.1], [0.5,-0.1]]
        responses = ['left', 'right']

        # create a list of indices to those lists, which will
        # get shuffled on each trial:
        indices = [0, 1]
      Begin Routine:
        # randomise locations for this trial:
        shuffle(indices)
        targetPosAmSS = positionsAm[indices[0]]
        targetPosAmLL = positionsAm[indices[1]]
        targetPosDelSS = positionsDel[indices[0]]
        targetPosDelLL = positionsDel[indices[1]]
        # get the corresponding correct response:
        corrAns = responses[indices[1]]
    TextComponent pregunta
      letterHeight = 0.1
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = ¿qué preferirías?
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    TextComponent ssAm_P
      letterHeight = 0.1
      pos [set every repeat] = targetPosAmSS
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $ssAmount_text
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    TextComponent ssDel_P
      letterHeight = 0.1
      pos [set every repeat] = targetPosDelSS
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = hoy
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    TextComponent llAm_P
      letterHeight = 0.1
      pos [set every repeat] = targetPosAmLL
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $llAmount_text
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    TextComponent llDel_P
      letterHeight = 0.1
      pos [set every repeat] = targetPosDelLL
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $llDelay_text
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    KeyboardComponent respP
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 19.5
      storeCorrect = True
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  Routine Instr5
    TextComponent comienzo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Ahora sí vamos a empezar con la tarea. Recuerda que debes contestar todas las preguntas. Tienes 20 segundos por cada pregunta. 
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    KeyboardComponent key5
      allowedKeys = 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Fin
    TextComponent Gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Terminaste!

        Muchas gracias por participar!

        Oprime barra espaceadora para terminar
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst2_2
    TextComponent intro2_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Aunque estas decisiones son hipotéticas, te pedimos que hagas cada elección con honestidad, es decir, que respondas cuál es tu verdadera preferencia tal y como si fuéramos a darte el dinero que escogiste en la fecha en la que escogiste.

        Es muy importante que sepas que en esta tarea NO HAY respuestas correctas o incorrectas, cada pregunta es sobre TU preferencia, así que tus respuestas pueden ser muy distintas de las de otra persona. Por este motivo, te recomendamos que contestes con sinceridad para que tus respuestas reflejen tus preferencias únicas.
    KeyboardComponent key2_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Inst2_3
    TextComponent Intro2_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Si escoges la opción de la izquierda oprime la flecha hacia la izquierda, si escoges la opción de la derecha oprime la flecha hacia la derecha
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    KeyboardComponent key2_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine Inst1
  Routine Instr2
  Routine Inst2_2
  Routine Inst2_3
  Routine Inst3
  Routine Inst4
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = choiceSet_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ssAmount': 10000, 'llAmount': 109000, 'llDelay': '9 días', 'ssAmount_text': '$ 10,000 ', 'llAmount_text': '$ 109,000 '},
      {'ssAmount': 25000, 'llAmount': 35000, 'llDelay': '150 días', 'ssAmount_text': '$ 25,000 ', 'llAmount_text': '$ 35,000 '},
      {'ssAmount': 10000, 'llAmount': 19000, 'llDelay': '89 días', 'ssAmount_text': '$ 10,000 ', 'llAmount_text': '$ 19,000 '}]
    Routine Pract
    Routine fb_Pract
  LoopTerminator Practice
  Routine Instr5
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = choiceSet_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 20000, 'll_Delay': 5, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 20,000 ', 'll_Delay_text': '5 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 39000, 'll_Delay': 6, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 39,000 ', 'll_Delay_text': '6 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 61000, 'll_Delay': 4, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 61,000 ', 'll_Delay_text': '4 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 109000, 'll_Delay': 5, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 109,000 ', 'll_Delay_text': '5 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 150000, 'll_Delay': 5, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 150,000 ', 'll_Delay_text': '5 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 19000, 'll_Delay': 11, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 19,000 ', 'll_Delay_text': '11 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 40000, 'll_Delay': 10, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 40,000 ', 'll_Delay_text': '10 días'},
      {'ss_Amt': 10000, 'ss_Delay': 0, 'll_Amt': 59000, 'll_Delay': 9, 'ss_Amt_text': '$ 10,000 ', 'ss_Delay_text': '0 días', 'll_Amt_text': '$ 59,000 ', 'll_Delay_text': '9 días'}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
    Routine ITC
    Routine fb_Trials
  LoopTerminator trials
  Routine Fin
