PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = CPT
  logging level = debug
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Routines
  Routine Instructions
    TextComponent Init_Instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Escoja la lotería que prefiera.

        Oprima barra espaceadora para continuar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block
    TextComponent block_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $cond_spanish
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text_gracias
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Gracias por su participación
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  Routine gambles
    ImageComponent image
      image [set every repeat] = $img_address
      size = (0.62111111, 0.40888889)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator block_loop loopType="TrialHandler"
    conditionsFile = block_switch.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block_address', 'img_links_loose.csv'), ('cond_spanish', 'Va a empezar turnos con opciones de perdida. Oprima barra espaceadora para continuar.')]),
      OrderedDict([('block_address', 'img_links_win.csv'), ('cond_spanish', 'Va a empezar turnos con opciones de ganancia. Oprima barra espaceadora para continuar.')]),
      OrderedDict([('block_address', 'img_links_mix.csv'), ('cond_spanish', 'Va a empezar turnos con opciones mixtas (perdida y ganancia). Oprima barra espaceadora para continuar')])]
    Routine block
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_address
      loopType = random
      nReps = 1
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      Routine gambles
    LoopTerminator trials
  LoopTerminator block_loop
  Routine thanks
